forall insert kext
forall insert kextna1

nsyn=0
forsec "dend_apical" {nsyn=nsyn+1}
objref syn[nsyn]
proc syn_set(){
	k=0
	forsec "dend_apical"{
		syn[k]=new expsyn2c(0.5)
		syn[k].tot_num=$1  //total stimulation number
		syn[k].num=$2 	//number of stimulation in each group
		syn[k].ampar_tot=$3
		syn[k].del=5
		syn[k].interval_s=$4  //short interval
		syn[k].interval_l=$5  //long interval
		k=k+1
	}
}
soma insert cad
soma insert caL3d
//soma insert capump

objref slist
slist=new SectionList()
sec_23_24_dend_apical slist.append()
sec_27_35_dend_apical slist.append()
sec_35_45_dend_apical slist.append()
sec_46_54_dend_apical slist.append()
sec_54_56_dend_apical slist.append()
sec_57_59_dend_apical slist.append()
soma distance()

k=0
forsec slist {
	print secname(),"	", k, "		", distance(0.5)
}

forall insert epasn
stim.amp=0
stim.dur=0
tstop=500

forsec "axon_iseg" {
	insert kext
	insert epasn
	insert kextna1
}

forsec "axon_iseg" {
	insert kext
	insert epasn
	insert kextna1
}

axon_hill {
	insert kext
	insert epasn
	insert kextna1
}

soma {
	insert kext
	insert epasn
	insert kextna1
}

forsec "dend" {
	insert kext
	insert epasn
	insert kextna1
}

vhalf_h_Naf_i0=-60
vhalf_h_Naf_i1=-65
vhalf_n_Naf_i0=-32
vhalf_n_Naf_i1=-35

//----------------------
Gbar_KDM=30
Gbar_KA=2
GBar_KDR=100
tauA_n_Naf_i0=0.001
tauA_n_Naf_i1=0.1
vhalf_h_Naf_i1=-63
s0_Gbar_KDR_i1=100
tauA_h_Naf_i1=50
tauA_h_Naf_i0=10
vhalf_n_Naf_i0=-35
vhalf_n_Naf_i1=-40	

proc para_save(){local k localobj file, pvec
	pvec=new Vector(52)
	file=new File()
	
	//Naf_i0
	pvec.x[0]=vhalf_n_Naf_i0
	pvec.x[1]=slope_n_Naf_i0
	pvec.x[2]=tauA_n_Naf_i0
	pvec.x[3]=tauG_n_Naf_i0

	pvec.x[4]=vhalf_h_Naf_i0
	pvec.x[5]=slope_h_Naf_i0
	pvec.x[6]=tauA_h_Naf_i0
	pvec.x[7]=tauG_h_Naf_i0

	//Naf_i1
	pvec.x[8]=vhalf_n_Naf_i1
	pvec.x[9]=slope_n_Naf_i1
	pvec.x[10]=tauA_n_Naf_i1
	pvec.x[11]=tauG_n_Naf_i1

	pvec.x[12]=vhalf_h_Naf_i1
	pvec.x[13]=slope_h_Naf_i1
	pvec.x[14]=tauA_h_Naf_i1
	pvec.x[15]=tauG_h_Naf_i1

	//KDR_i1
	pvec.x[16]=vhalf_n_KDR_i1
	pvec.x[17]=slope_n_KDR_i1
	pvec.x[18]=tauA_n_KDR_i1
	pvec.x[19]=tauG_n_KDR_i1

	pvec.x[20]=vhalf_h_KDR_i1
	pvec.x[21]=slope_h_KDR_i1
	pvec.x[22]=tauA_h_KDR_i1
	pvec.x[23]=tauG_h_KDR_i1

	//KA_i1
	pvec.x[24]=vhalf_n_KA_i1
	pvec.x[25]=slope_n_KA_i1
	pvec.x[26]=tauA_n_KA_i1
	pvec.x[27]=tauG_n_KA_i1

	pvec.x[28]=vhalf_h_KA_i1
	pvec.x[29]=slope_h_KA_i1
	pvec.x[30]=tauA_h_KA_i1
	pvec.x[31]=tauG_h_KA_i1

	//KDM
	pvec.x[32]=vhalf_n_KDM_i1
	pvec.x[33]=slope_n_KDM_i1
	pvec.x[34]=tauA_n_KDM_i1
	pvec.x[35]=tauG_n_KDM_i1

	pvec.x[36]=vhalf_h_KDM_i1
	pvec.x[37]=slope_h_KDM_i1
	pvec.x[38]=tauA_h_KDM_i1
	pvec.x[39]=tauG_h_KDM_i1

	//Gbar
	pvec.x[40]=Gbar_Naf
	pvec.x[41]=s0_Gbar_Naf
	pvec.x[42]=aXh_Gbar_Naf
	pvec.x[43]=aXi0_Gbar_Naf
	pvec.x[44]=aXi1_Gbar_Naf

	pvec.x[45]=Gbar_KDR
	pvec.x[46]=s0_Gbar_KDR
	pvec.x[47]=aXh_Gbar_KDR
	pvec.x[48]=aXi0_Gbar_KDR
	pvec.x[49]=aXi1_Gbar_KDR
	pvec.x[50]=Gbar_KA
	pvec.x[51]=Gbar_KDM

	file.wopen($s1)
	//pvec.fwrite(file
	for k=0,pvec.size()-1{
		file.printf("%f\n", pvec.x[k])
	}

	file.close()	
}

proc para_read(){local k localobj pvec, file
	pvec=new Vector(52)
	file=new File()

	file.ropen($s1)
	for k=0, pvec.size()-1{
		pvec.x[k]=file.scanvar()
	}
		
	//Naf_i0
	vhalf_n_Naf_i0=pvec.x[0]
	slope_n_Naf_i0=pvec.x[1]
	tauA_n_Naf_i0=pvec.x[2]
	tauG_n_Naf_i0=pvec.x[3]

	vhalf_h_Naf_i0=pvec.x[4]
	slope_h_Naf_i0=pvec.x[5]
	tauA_h_Naf_i0=pvec.x[6]
	tauG_h_Naf_i0=pvec.x[7]

	//Naf_i1
	vhalf_n_Naf_i1=pvec.x[8]
	slope_n_Naf_i1=pvec.x[9]
	tauA_n_Naf_i1=pvec.x[10]
	tauG_n_Naf_i1=pvec.x[11]

	vhalf_h_Naf_i1=pvec.x[12]
	slope_h_Naf_i1=pvec.x[13]
	tauA_h_Naf_i1=pvec.x[14]
	tauG_h_Naf_i1=pvec.x[15]

	//KDR_i1
	vhalf_n_KDR_i1=pvec.x[16]
	slope_n_KDR_i1=pvec.x[17]
	tauA_n_KDR_i1=pvec.x[18]
	tauG_n_KDR_i1=pvec.x[19]


	vhalf_h_KDR_i1=pvec.x[20]
	slope_h_KDR_i1=pvec.x[21]
	tauA_h_KDR_i1=pvec.x[22]
	tauG_h_KDR_i1=pvec.x[23]

	//KA_i1
	vhalf_n_KA_i1=pvec.x[24]
	slope_n_KA_i1=pvec.x[25]
	tauA_n_KA_i1=pvec.x[26]
	tauG_n_KA_i1=pvec.x[27]

	vhalf_h_KA_i1=pvec.x[28]
	slope_h_KA_i1=pvec.x[29]
	tauA_h_KA_i1=pvec.x[30]
	tauG_h_KA_i1=pvec.x[31]

	//KDM
	vhalf_n_KDM_i1=pvec.x[32]
	slope_n_KDM_i1=pvec.x[33]
	tauA_n_KDM_i1=pvec.x[34]
	tauG_n_KDM_i1=pvec.x[35]

	vhalf_h_KDM_i1=pvec.x[36]
	slope_h_KDM_i1=pvec.x[37]
	tauA_h_KDM_i1=pvec.x[38]
	tauG_h_KDM_i1=pvec.x[39]

	//Gbar
	Gbar_Naf=pvec.x[40]
	s0_Gbar_Naf=pvec.x[41]
	aXh_Gbar_Naf=pvec.x[42]
	aXi0_Gbar_Naf=pvec.x[43]
	aXi1_Gbar_Naf=pvec.x[44]

	Gbar_KDR=pvec.x[45]
	s0_Gbar_KDR=pvec.x[46]
	aXh_Gbar_KDR=pvec.x[47]
	aXi0_Gbar_KDR=pvec.x[48]
	aXi1_Gbar_KDR=pvec.x[49]
	Gbar_KA=pvec.x[50]
	Gbar_KDM=pvec.x[51]
	
	file.close()
}